PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = sounddevice
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = exp_g1
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the study.

        In this study, you'll finish two similar but different experiments. You'll receive instructions and do a couple of practice trials before the real experiments begin.

        Between the two experiments you'll have time to take a 5-minute break. During the experiment, if you need to pause or stop, please raise you hand so the researcher can assist you.

        Press space to continue.
    KeyboardComponent end_welcome
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine exp1_trial
    ImageComponent exp1_trial_image_l
      image [set every repeat] = $left
      pos = (-0.5, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 5
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    ImageComponent exp1_trial_image_r
      image [set every repeat] = $right
      pos = (0.5, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 5
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    KeyboardComponent exp1_trial_key
      allowedKeys [set every repeat] = 'lshift','rshift'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 5
      store = all keys
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    SoundComponent exp1_trial_sound
      sound [set every repeat] = $sound_dir
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4
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    TextComponent exp1_trial_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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  Routine end_exp1_trial
    TextComponent end_exp1_trial_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Good Job!

        If you want to practice again, hit space.

        If you are ready to start the experiment, hit right shift.
    KeyboardComponent end_exp1_trial_key
      allowedKeys = 'space','rshift'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent exp1_trial_code
      Code Type = Auto->JS
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      End Routine:
        if end_exp1_trial_key.keys == "rshift":
              exp1_retrial.finished = True
  Routine exp1
    ImageComponent exp1_image_l
      image [set every repeat] = $left
      pos = (-0.5, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 5
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    ImageComponent exp1_image_r
      image [set every repeat] = $right
      pos = (0.5, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 5
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    KeyboardComponent exp1_key
      allowedKeys [set every repeat] = 'lshift','rshift'
      correctAns = $correct_key
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 5
      store = first key
      storeCorrect = True
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    SoundComponent exp1_sound
      sound [set every repeat] = $sound_dir
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4
      volume [set every repeat] = 1
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    TextComponent exp1_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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  Routine exp1_end
    TextComponent exp1_end_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Good Job! This is the end of experiment 1

        Before we start experiment 2, you can take a short break.

        When you are ready to start experiment 2, please press space to continue.
    KeyboardComponent exp1_end_key
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine exp1_instr
    TextComponent exp1_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome! Here are the instructions for experiment 1.

        In this experiment you will see two items on the screen while listening to a sentence.Only one of the two items will be mentioned in the recording. When you hear the item, you should hit the corresponding left or right shift key immediately. The sentence you hear can be English, Spanish or a mix of both. You only need to hit the key ONCE.

        Before the experiment starts, let's do a couple of practice trials.

        Hit space to start practice trial.
    KeyboardComponent exp1_instr_key
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine exp1_start
    KeyboardComponent exp1_start_key
      allowedKeys = 'rshift'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent exp1_start_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now let's start the experiment 1!

        Please keep your hands on the left-shift key and right-shift key.

        To start, please, hit the left-shift key then the right-shift key.
  Routine exp2_instr
    TextComponent exp2_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome back. Here are the instrctions for experiment 2

        You'll see two flags: American flag representing English and Spanish flag respresenting Spanish. If you hear English, hit the left shift key, if you hear Spanish, hit the right shift key. If you hear a change of language, you should then hit the other shift key as soon as you hear the change.

        Before the experiment starts, let's do a couple of practice trials.

        Hit space to start practice trial.
    KeyboardComponent exp2_instr_key
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine exp2_trial
    ImageComponent exp2_trial_iamge_l
      image [set every repeat] = $left
      pos = (-0.5, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 5
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    ImageComponent exp2_trial_image_r
      image [set every repeat] = $right
      pos = (0.5, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 5
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    KeyboardComponent exp2_trial_key
      allowedKeys [set every repeat] = 'lshift','rshift'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 5
      store = all keys
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    SoundComponent exp2_trial_sound
      sound [set every repeat] = $sound_dir
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4
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    TextComponent cross
      disabled = True
      letterHeight = 0.05
      startVal [condition] = 0
      stopVal [duration (s)] = 0.25
      text [set every repeat] = +
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    TextComponent exp2_trial_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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  Routine end_exp2_trial
    TextComponent end_exp2_trial_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Good Job!

        If you want to practice again, hit space.

        If you are ready to start the experiment, hit right shift.
    KeyboardComponent end_exp2_trial_key
      allowedKeys = 'space','rshift'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent exp2_trial_code
      Code Type = Auto->JS
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      End Routine:
        if end_exp2_trial_key.keys == "rshift":
              exp2_retrial.finished = True
  Routine exp2_start
    KeyboardComponent exp2_start_key
      allowedKeys = 'rshift'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent exp2_start_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now let's start the experiment 2!

        Please keep your hands on the left-shift key and right-shift key.

        To start, please, hit the left-shift key then the right-shift key.
  Routine exp2
    ImageComponent exp2_image_l
      image [set every repeat] = $left
      pos = (-0.5, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 5
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    ImageComponent exp2_image_r
      image [set every repeat] = $right
      pos = (0.5, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 5
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    KeyboardComponent exp2_key
      allowedKeys [set every repeat] = 'lshift','rshift'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 5
      store = all keys
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    SoundComponent exp2_sound
      sound [set every repeat] = $sound_dir
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4
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    TextComponent exp2_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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  Routine full_end
    TextComponent full_end_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the end of the study.


        Thank you for your participation!

        Have a great day!

        Press space to exit.
    KeyboardComponent full_end_key
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine welcome
  LoopInitiator exp1_retrial loopType="TrialHandler"
    loopType = sequential
    nReps = 1000
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    Routine exp1_instr
    LoopInitiator exp1_trial_loop loopType="TrialHandler"
      Selected rows = 0:8
      conditionsFile = /Users/gabmac/Documents/RU/QP/exp/practice_trial/trial_exp_1/trial1.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'num': 'tr1', 'list': 'lt', 'cond': 'tr', 'lang': 'en', 'type': 'na', 'sound_dir': '../practice_trial/audio/tr1.wav', 'phr': 'Where are your kids?', 'sent_code': 'lt_tr_en_na_tr1', 'mat': '-', 'mat_num': '-', 'emb_num': '-', 'emb': '-', 'cut': '-', 'mat_f0_c': '-', 'left': '../image/kids.png', 'right': '../image/plates.png', 'correct_img': 'kids', 'correct': 'lshift'},
        {'num': 'tr2', 'list': 'lt', 'cond': 'tr', 'lang': 'en', 'type': 'na', 'sound_dir': '../practice_trial/audio/tr2.wav', 'phr': 'Who is buying my car?', 'sent_code': 'lt_tr_en_na_tr2', 'mat': '-', 'mat_num': '-', 'emb_num': '-', 'emb': '-', 'cut': '-', 'mat_f0_c': '-', 'left': '../image/bag.png', 'right': '../image/car.png', 'correct_img': 'car', 'correct': 'rshift'},
        {'num': 'tr3', 'list': 'lt', 'cond': 'tr', 'lang': 'sp', 'type': 'na', 'sound_dir': '../practice_trial/audio/tr3.wav', 'phr': '¿Dónde está mi perro?', 'sent_code': 'lt_tr_sp_na_tr3', 'mat': '-', 'mat_num': '-', 'emb_num': '-', 'emb': '-', 'cut': '-', 'mat_f0_c': '-', 'left': '../image/dog.png', 'right': '../image/grandma.png', 'correct_img': 'dog', 'correct': 'lshift'},
        {'num': 'tr4', 'list': 'lt', 'cond': 'tr', 'lang': 'sp', 'type': 'na', 'sound_dir': '../practice_trial/audio/tr4.wav', 'phr': '¿De quién es la bolsa?', 'sent_code': 'lt_tr_sp_na_tr4', 'mat': '-', 'mat_num': '-', 'emb_num': '-', 'emb': '-', 'cut': '-', 'mat_f0_c': '-', 'left': '../image/shirt.png', 'right': '../image/bag.png', 'correct_img': 'bag', 'correct': 'rshift'}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
      Routine exp1_trial
    LoopTerminator exp1_trial_loop
    Routine end_exp1_trial
  LoopTerminator exp1_retrial
  Routine exp1_start
  LoopInitiator exp1_loop loopType="TrialHandler"
    Selected rows = 0:55
    conditionsFile = /Users/gabmac/Documents/RU/QP/exp/stim/stim_g1_e1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'exp_num': 1, 'sentence_code': 'l1_f_en_na_061', 'lsit': 'l1', 'cond': 'f', 'lang': 'en', 'type': 'na', 'num': 61.0, 'image': 'dog', 'image_alt': 'cat', 'left_img': 'cat', 'right_img': 'dog', 'left': '../image/cat.png', 'right': '../image/dog.png', 'correct_img': 'dog', 'correct_key': 'r', 'sound_dir': '../audio/061.wav', 'image_dir': '../image/'},
      {'exp_num': 1, 'sentence_code': 'l1_f_en_na_062', 'lsit': 'l1', 'cond': 'f', 'lang': 'en', 'type': 'na', 'num': 62.0, 'image': 'shoe', 'image_alt': 'ring', 'left_img': 'shoe', 'right_img': 'ring', 'left': '../image/shoe.png', 'right': '../image/ring.png', 'correct_img': 'shoe', 'correct_key': 'l', 'sound_dir': '../audio/062.wav', 'image_dir': None},
      {'exp_num': 1, 'sentence_code': 'l1_f_en_na_063', 'lsit': 'l1', 'cond': 'f', 'lang': 'en', 'type': 'na', 'num': 63.0, 'image': 'man', 'image_alt': 'woman', 'left_img': 'woman', 'right_img': 'man', 'left': '../image/woman.png', 'right': '../image/man.png', 'correct_img': 'man', 'correct_key': 'r', 'sound_dir': '../audio/063.wav', 'image_dir': None},
      {'exp_num': 1, 'sentence_code': 'l1_f_en_na_064', 'lsit': 'l1', 'cond': 'f', 'lang': 'en', 'type': 'na', 'num': 64.0, 'image': 'wallet', 'image_alt': 'key', 'left_img': 'wallet', 'right_img': 'key', 'left': '../image/wallet.png', 'right': '../image/key.png', 'correct_img': 'wallet', 'correct_key': 'l', 'sound_dir': '../audio/064.wav', 'image_dir': None}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
    Routine exp1
  LoopTerminator exp1_loop
  Routine exp1_end
  LoopInitiator exp2_retrial loopType="TrialHandler"
    loopType = sequential
    nReps = 1000
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    Routine exp2_instr
    LoopInitiator exp2_trial_loop loopType="TrialHandler"
      Selected rows = 0:8
      conditionsFile = /Users/gabmac/Documents/RU/QP/exp/practice_trial/trial_exp_2/trial2.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'num': 'tr1', 'list': 'lt', 'cond': 'tr', 'lang': 'en', 'type': 'na', 'sound_dir': '../practice_trial/audio/tr1.wav', 'phr': 'Where are your kids?', 'sent_code': 'lt_tr_en_na_tr1', 'mat': '-', 'mat_num': '-', 'emb_num': '-', 'emb': '-', 'cut': '-', 'mat_f0_c': '-', 'left': '../image/america.png', 'right': '../image/spain.png'},
        {'num': 'tr2', 'list': 'lt', 'cond': 'tr', 'lang': 'en', 'type': 'na', 'sound_dir': '../practice_trial/audio/tr2.wav', 'phr': 'Who is buying my car?', 'sent_code': 'lt_tr_en_na_tr2', 'mat': '-', 'mat_num': '-', 'emb_num': '-', 'emb': '-', 'cut': '-', 'mat_f0_c': '-', 'left': '../image/america.png', 'right': '../image/spain.png'},
        {'num': 'tr3', 'list': 'lt', 'cond': 'tr', 'lang': 'sp', 'type': 'na', 'sound_dir': '../practice_trial/audio/tr3.wav', 'phr': '¿Dónde está mi perro?', 'sent_code': 'lt_tr_sp_na_tr3', 'mat': '-', 'mat_num': '-', 'emb_num': '-', 'emb': '-', 'cut': '-', 'mat_f0_c': '-', 'left': '../image/america.png', 'right': '../image/spain.png'},
        {'num': 'tr4', 'list': 'lt', 'cond': 'tr', 'lang': 'sp', 'type': 'na', 'sound_dir': '../practice_trial/audio/tr4.wav', 'phr': '¿De quién es la bolsa?', 'sent_code': 'lt_tr_sp_na_tr4', 'mat': '-', 'mat_num': '-', 'emb_num': '-', 'emb': '-', 'cut': '-', 'mat_f0_c': '-', 'left': '../image/america.png', 'right': '../image/spain.png'}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
      Routine exp2_trial
    LoopTerminator exp2_trial_loop
    Routine end_exp2_trial
  LoopTerminator exp2_retrial
  Routine exp2_start
  LoopInitiator exp2_loop loopType="TrialHandler"
    Selected rows = 0:55
    conditionsFile = /Users/gabmac/Documents/RU/QP/exp/stim/stim_g1_e2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'exp_num': 2, 'sentence_code': 'l2_f_en_na_096', 'list': 'l2', 'cond': 'f', 'lang': 'en', 'type': 'na', 'num': 96.0, 'image': 'america', 'image_alt': 'spain', 'cs': None, 'sound_dir': '../audio/096.wav', 'left': '../image/america.png', 'right': '../image/spain.png'},
      {'exp_num': 2, 'sentence_code': 'l2_f_en_na_097', 'list': 'l2', 'cond': 'f', 'lang': 'en', 'type': 'na', 'num': 97.0, 'image': 'america', 'image_alt': 'spain', 'cs': None, 'sound_dir': '../audio/097.wav', 'left': '../image/america.png', 'right': '../image/spain.png'},
      {'exp_num': 2, 'sentence_code': 'l2_f_en_na_098', 'list': 'l2', 'cond': 'f', 'lang': 'en', 'type': 'na', 'num': 98.0, 'image': 'america', 'image_alt': 'spain', 'cs': None, 'sound_dir': '../audio/098.wav', 'left': '../image/america.png', 'right': '../image/spain.png'},
      {'exp_num': 2, 'sentence_code': 'l2_f_en_na_099', 'list': 'l2', 'cond': 'f', 'lang': 'en', 'type': 'na', 'num': 99.0, 'image': 'america', 'image_alt': 'spain', 'cs': None, 'sound_dir': '../audio/099.wav', 'left': '../image/america.png', 'right': '../image/spain.png'},
      {'exp_num': 2, 'sentence_code': 'l2_f_en_na_100', 'list': 'l2', 'cond': 'f', 'lang': 'en', 'type': 'na', 'num': 100.0, 'image': 'america', 'image_alt': 'spain', 'cs': None, 'sound_dir': '../audio/100.wav', 'left': '../image/america.png', 'right': '../image/spain.png'}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
    Routine exp2
  LoopTerminator exp2_loop
  Routine full_end
