PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3008, 1692]
  expName = pilot_production
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text_trial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $item
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MicrophoneComponent mic
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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  Routine intro
    TextComponent text_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        Please press SPACE key to continue.
    KeyboardComponent key_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MicrophoneComponent mic_2
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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  Routine instr
    TextComponent text_instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        There will be some sentences for you to record.

        On each screen you'll see one sentence. Please read it out loud as if you are using them in real life with your family or friends.

        Take all the time you need to prepare, and when you are ready to record, you can simply start to read it out loud. If you want to record the sentence again, you can simply pause briefly and start from the beginning of the sentence again. When you are ready to continue with the next sentence, you can press "SPACE" key.

        Let's start with some try-outs. Press "SPACE" key to continue.
    KeyboardComponent key_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tutorial_trial
    KeyboardComponent key_tutorial
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $item
  Routine start_page
    TextComponent text_start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, let's get started.
        Press "SPACE" to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_page
    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you for your participation
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Flow
  Routine intro
  Routine instr
  LoopInitiator tutorial_trials loopType="TrialHandler"
    conditionsFile = stim_tutorial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item': 'I want to order Chinese food.'},
      {'item': 'Manuel lava la ropa.'}]
    Routine tutorial_trial
  LoopTerminator tutorial_trials
  Routine start_page
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stim_trial.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'item': 'This tastes great.', 'Target': 0},
      {'item': 'Se me olvidó lavar los platos.', 'Target': 0},
      {'item': 'I like those pantalones.', 'Target': 0},
      {'item': '¿Por qué le regalaste tus gafas?', 'Target': 1},
      {'item': 'Mi número de teléfono es 969-009-5674.', 'Target': 0},
      {'item': '¿Y tú, qué te gustaría tomar?', 'Target': 0},
      {'item': 'I overslept.', 'Target': 0},
      {'item': 'What is the dog doing?', 'Target': 1},
      {'item': 'Las tortillas están on sale.', 'Target': 0},
      {'item': 'Why do you like my gatos?', 'Target': 1},
      {'item': 'I overslept.', 'Target': 0},
      {'item': 'Gracias pero no tengo hambre.', 'Target': 0},
      {'item': 'What’s your zip code?', 'Target': 0},
      {'item': 'Where can we find your abuela?', 'Target': 1},
      {'item': 'I feel like to have some ice-cream.', 'Target': 0},
      {'item': 'Hace mucho sol hoy.', 'Target': 0},
      {'item': 'How did he get his móvil?', 'Target': 1},
      {'item': 'Everything in my fridge están mal.', 'Target': 0},
      {'item': 'Who is the girl’s father?', 'Target': 1},
      {'item': 'Where is my wallet?', 'Target': 1},
      {'item': "No, that's not what I ordered.", 'Target': 0},
      {'item': '¿Cuál es tu libro?', 'Target': 1},
      {'item': '¿Dónde está mi bolsa?', 'Target': 1},
      {'item': "Bye, I'll be back in two hours.", 'Target': 0}]
    Routine trial
  LoopTerminator trials
  Routine end_page
