PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = exp
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the study.

        In this study, you'll finish two similar but different experiments. You'll receive instructions and do a couple of practice trials before the real experiments begin.

        Between the two experiments you'll have time to take a 5-minute break. During the experiment, if you need to pause or stop, please raise you hand so the researcher can assist you.

        Press space to continue.
    KeyboardComponent end_welcome
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine exp1_instr
    TextComponent exp1_instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is insturction for experiment 1.

        In this experiment you will see two image items on the screen while listening a sentence. The sentence you hear can be English, Spanish or a mix of both. Each sentence will mention one and only one of the two items. When you hear the image item being mentioned, please press the corresponding left/right shift key on keyboard.

        Before the experiment starts, let's do a couple of practice trials.

        Press space to start practice trial.
    KeyboardComponent end_instr
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine exp1_trial
    ImageComponent exp1_trial_image_l
      image [set every repeat] = $left
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    ImageComponent exp1_trial_image_r
      image [set every repeat] = $right
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    KeyboardComponent exp1_trial_key
      allowedKeys [set every repeat] = 'lshift','rshift'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = all keys
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    SoundComponent exp1_trial_sound
      sound [set every repeat] = $sound_dir
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4
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  Routine exp1_start
    KeyboardComponent exp1_start_key
      allowedKeys = 'rshift'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent exp1_start_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now let's start the experiment 1!

        Please keep your hands on the left-shift key and right-shift key.

        To start, please, press the left-shift key then the right-shift key.
  Routine end_exp1_trial
    TextComponent end_exp1_trial_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = Good Job!
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  Routine exp1
    ImageComponent exp1_image_l
      image [set every repeat] = $left
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    ImageComponent exp1_image_r
      image [set every repeat] = $right
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    KeyboardComponent exp1_key
      allowedKeys [set every repeat] = 'lshift','rshift'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = all keys
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    SoundComponent exp1_sound
      sound [set every repeat] = $sound_dir
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4
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  Routine exp1_end
Flow
  Routine welcome
  Routine exp1_instr
  LoopInitiator exp1_trial_loop loopType="TrialHandler"
    Selected rows = 0:8
    conditionsFile = /Users/gabmac/Documents/RU/QP/exp/practice_trial/trial_exp_1/trial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'n': 1, 'num': 'tr1', 'sound_dir': '../practice_trial/audio/tr1.wav', 'left': '../image/kids.png', 'right': '../image/plates.png'},
      {'n': 2, 'num': 'tr2', 'sound_dir': '../practice_trial/audio/tr2.wav', 'left': '../image/bag.png', 'right': '../image/car.png'},
      {'n': 3, 'num': 'tr3', 'sound_dir': '../practice_trial/audio/tr3.wav', 'left': '../image/dog.png', 'right': '../image/grandma.png'},
      {'n': 4, 'num': 'tr4', 'sound_dir': '../practice_trial/audio/tr4.wav', 'left': '../image/shirt.png', 'right': '../image/bag.png'},
      {'n': 5, 'num': 'tr5', 'sound_dir': '../practice_trial/audio/tr5.wav', 'left': '../image/donuts.png', 'right': '../image/cups.png'},
      {'n': 6, 'num': 'tr6', 'sound_dir': '../practice_trial/audio/tr6.wav', 'left': '../image/chair.png', 'right': '../image/sweater.png'},
      {'n': 7, 'num': 'tr7', 'sound_dir': '../practice_trial/audio/tr7.wav', 'left': '../image/shirt.png', 'right': '../image/wallet.png'},
      {'n': 8, 'num': 'tr8', 'sound_dir': '../practice_trial/audio/tr8.wav', 'left': '../image/key.png', 'right': '../image/flipflops.png'},
      {'n': None, 'num': None, 'sound_dir': None, 'left': None, 'right': None},
      {'n': None, 'num': None, 'sound_dir': None, 'left': None, 'right': None},
      {'n': None, 'num': None, 'sound_dir': None, 'left': None, 'right': None},
      {'n': None, 'num': None, 'sound_dir': None, 'left': None, 'right': None},
      {'n': None, 'num': None, 'sound_dir': None, 'left': None, 'right': None},
      {'n': None, 'num': None, 'sound_dir': None, 'left': None, 'right': None}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
    Routine exp1_trial
  LoopTerminator exp1_trial_loop
  Routine end_exp1_trial
  Routine exp1_start
  LoopInitiator exp1_loop loopType="TrialHandler"
    Selected rows = 1:56
    loopType = random
    nReps = 1
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    Routine exp1
  LoopTerminator exp1_loop
  Routine exp1_end
