PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['id'], expName, expInfo['date'])
  Experiment info = {'id': '', 'Variety of Spanish that is most familiar to you?': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = empathy_lextale_comb
  exportHTML = on Save
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine instructions_2afc
    TextComponent text_2afc_instruction
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text
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    TextComponent text_2afc_instructions_continue
      letterHeight = 0.045
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $continue_text
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    KeyboardComponent key_resp_2afc_instructions
      allowedKeys = 'c','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine practice_2afc
    SoundComponent sound_2afc_practice_stim
      sound [set every repeat] = $path
      startVal [time (s)] = 0.500
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    TextComponent text_2afc_response_yes_practice
      letterHeight = 0.1
      pos = (-0.3, 0)
      startVal [time (s)] = 0.250
      text = Yes
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    TextComponent text_2afc_response_no_practice
      letterHeight = 0.1
      pos = (0.3, 0)
      startVal [time (s)] = 0.250
      text = No
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    KeyboardComponent key_resp_2afc_practice
      allowedKeys = '1','0'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.500
      store = first key
      storeCorrect = True
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    TextComponent text_2afc_question_practice
      color = blue
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Is it a question?
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  Routine check_2afc
    TextComponent text_2afc_check
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great! Now we’ll begin for real.

        Try to respond as quickly and as accurately as possible after hearing each utterance.

        (press the spacebar to start)
    KeyboardComponent key_resp_2afc_gotit
      allowedKeys = 'c','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_2afc
    CodeComponent code_2afc
      Code Type = Both
      Begin Experiment:
        col_name = ['andalusian', 'argentine', 'castilian', 'chilean', 'cuban', 'mexican', 'peruvian', 'puertorican']
      Begin JS Experiment:
        col_name = ['andalusian', 'argentine', 'castilian', 'chilean', 'cuban', 'mexican', 'peruvian', 'puertorican']
      Begin JS Routine:
        the_col = col_name[Math.floor(Math.random() * col_name.length)];
      Begin Routine:
        the_col = np.random.choice(col_name, p=[0.125, 0.125, 0.125, 0.125, 0.125, 0.125, 0.125, 0.125])
      End JS Routine:
        trials_2afc_loop.addData('the_col', the_col)
      End Routine:
        trials_2afc_loop.addData('the_col', the_col)
    SoundComponent sound_2afc_stim_trial
      sound [set every repeat] = $eval(the_col)
      startVal [time (s)] = 0.500
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    TextComponent text_2afc_response_yes_trial
      letterHeight = 0.1
      pos = (-0.3, 0)
      startVal [time (s)] = 0.250
      text = Yes
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    TextComponent text_2afc_response_no_trial
      letterHeight = 0.1
      pos = (0.3, 0)
      startVal [time (s)] = 0.250
      text = No
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    KeyboardComponent key_resp_2afc_trial
      allowedKeys = '1','0'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.500
      store = first key
      storeCorrect = True
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    TextComponent text_2afc_question_trial
      color = blue
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Is this a question?
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  Routine instructions_lextale
    TextComponent text_lextale_instructions
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 0.8
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      text [set every repeat]:
        Great! Now for the Spanish test.

        You will see a total of 90 words, once each.

        You must decide if each word is a real word by pressing 1.

        If the word is not a real word, press 0.

        Press space to begin.
    KeyboardComponent key_resp_lextale_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_lextale
    TextComponent text_lextale_practice_label
      color = red
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = PRACTICE
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    TextComponent text_lextale_practice_word
      color = blue
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp_lextale_practice
      allowedKeys = '1','0'
      correctAns = $correct_response
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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    TextComponent text_lextale_practice_real_label
      letterHeight = 0.1
      pos = (-0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every repeat] = $prac_button_real
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    TextComponent text_lextale_practice_false_label
      letterHeight = 0.1
      pos = (0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every repeat] = $prac_button_false
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  Routine practice_feedback_lextale
    CodeComponent code_lextale
      Code Type = Both
      Begin JS Routine:
        if (key_resp_lextale_practice.corr == 1) {      msg = "Correct! That's a real word."; } else {      msg = "Ooo! That's not a real word."; }
      Begin Routine:
        if key_resp_lextale_practice.corr == 1:
            msg = "Correct! That's a real word."
        else:
            msg = "Ooo! That's not a real word."
    TextComponent text_lextale_practice_feedback
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_lextale_practice_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      store = nothing
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  Routine check_lextale
    TextComponent text_lextale_check
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Great! Let’s start.

        Press the spacebar to continue.
    KeyboardComponent key_resp_lextale_check
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_lextale
    TextComponent text_lextale_trial_word
      color = blue
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp_lextale_trial
      allowedKeys = '1','0'
      correctAns = $correct_response
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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    TextComponent text_lextale_trial_real_label
      letterHeight = 0.1
      pos = (-0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every repeat] = $button_real
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    TextComponent text_lextale_trial_false_label
      letterHeight = 0.1
      pos = (0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every repeat] = $button_false
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  Routine instructions_eq
    KeyboardComponent key_resp_eq_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_eq_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hi! This experiment is comprised of two short tasks. This is task 1.

        You are going to see a series of statements in English.

        Please read each statement carefully and rate how strongly you agree or disagree with it by using your mouse to click on the line.

        There are no right or wrong answers, or trick questions.

        (press the spacebar to begin)
  Routine trial_eq
    TextComponent text_eq_question_trial
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $item
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    SliderComponent slider_eq_trial
      forceEndRoutine = True
      granularity = 1
      labels = 'strongly agree', 'slightly agree', 'slightly disagree', 'strongly disagree'
      letterHeight = 0.025
      pos = (0, -0.2)
      saveStartStop = False
      size = (1, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating', 'triangleMarker']
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    KeyboardComponent key_resp_eq_trial
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_exp
  Routine start_exp
    TextComponent text_start_exp_variety
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        What variety of Spanish are you most familiar with?

        Type your answer below (e.g., Peruvian)
    TextboxComponent textbox_start_exp_variety
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.04
      padding = None
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = response
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    MouseComponent mouse_start_exp_variety
      clickable = end_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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    TextComponent end_button
      letterHeight = 0.045
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = click here to continue
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  Routine prolific_code
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        Prolific code: 446EFF68

        Press space to end
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine trail_big5
    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = 'strongly agree', 'slightly agree', 'neutral', 'slightly disagree', 'strongly disagree'
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_big5_question_trial
      letterHeight = 0.06
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $item
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  Routine instructions_big5
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Very good! Now for the second part of the personality test.

        This test is the same - how much each statement applies to you on by clicking a point on the 5 point scale.


        Press ‘space’ to begin.
Flow
  Routine instructions_lextale
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = trials/lextale_practice_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim': 0, 'word': 'depiste', 'correct_response': 0, 'prac_button_real': 'REAL', 'prac_button_false': 'FAKE'},
      {'stim': 0, 'word': 'sí', 'correct_response': 1, 'prac_button_real': 'REAL', 'prac_button_false': 'FAKE'},
      {'stim': 0, 'word': 'coné', 'correct_response': 0, 'prac_button_real': 'REAL', 'prac_button_false': 'FAKE'},
      {'stim': 0, 'word': 'calpar', 'correct_response': 0, 'prac_button_real': 'REAL', 'prac_button_false': 'FAKE'},
      {'stim': 0, 'word': 'joten', 'correct_response': 0, 'prac_button_real': 'REAL', 'prac_button_false': 'FAKE'},
      {'stim': 0, 'word': 'sacapuntas', 'correct_response': 1, 'prac_button_real': 'REAL', 'prac_button_false': 'FAKE'},
      {'stim': 0, 'word': 'priba', 'correct_response': 0, 'prac_button_real': 'REAL', 'prac_button_false': 'FAKE'},
      {'stim': 0, 'word': 'pelasula', 'correct_response': 0, 'prac_button_real': 'REAL', 'prac_button_false': 'FAKE'},
      {'stim': 0, 'word': 'bien', 'correct_response': 1, 'prac_button_real': 'REAL', 'prac_button_false': 'FAKE'},
      {'stim': 0, 'word': 'casa', 'correct_response': 1, 'prac_button_real': 'REAL', 'prac_button_false': 'FAKE'},
      {'stim': 0, 'word': 'lejo', 'correct_response': 0, 'prac_button_real': 'REAL', 'prac_button_false': 'FAKE'},
      {'stim': 0, 'word': 'pretantas', 'correct_response': 0, 'prac_button_real': 'REAL', 'prac_button_false': 'FAKE'}]
    Routine practice_lextale
  LoopTerminator practice_trials
  Routine check_lextale
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials/lextale_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim', 1), ('word', 'terzo'), ('correct_response', 0), ('button_real', 'REAL'), ('button_false', 'FAKE')]),
      OrderedDict([('stim', 2), ('word', 'pellizcar'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FAKE')]),
      OrderedDict([('stim', 3), ('word', 'pulmones'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FAKE')]),
      OrderedDict([('stim', 4), ('word', 'batillón'), ('correct_response', 0), ('button_real', 'REAL'), ('button_false', 'FAKE')]),
      OrderedDict([('stim', 5), ('word', 'zapato'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FAKE')]),
      OrderedDict([('stim', 6), ('word', 'tergiversar'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FAKE')]),
      OrderedDict([('stim', 7), ('word', 'pésimo'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FAKE')]),
      OrderedDict([('stim', 8), ('word', 'cadeña'), ('correct_response', 0), ('button_real', 'REAL'), ('button_false', 'FAKE')]),
      OrderedDict([('stim', 9), ('word', 'hacha'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FAKE')]),
      OrderedDict([('stim', 10), ('word', 'antar'), ('correct_response', 0), ('button_real', 'REAL'), ('button_false', 'FAKE')]),
      OrderedDict([('stim', 11), ('word', 'cenefa'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FAKE')]),
      OrderedDict([('stim', 12), ('word', 'asesinato'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FAKE')])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
    Routine trial_lextale
  LoopTerminator trials
  Routine prolific_code
  Routine end_exp
