PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3008, 1692]
  expName = pilot_production
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text_trial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $phr
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MicrophoneComponent mic
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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  Routine intro
    TextComponent text_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        Please press SPACE key to continue.
    KeyboardComponent key_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MicrophoneComponent mic_2
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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  Routine instr
    TextComponent text_instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        There will be some sentences for you to record.

        On each screen you'll see one sentence. Please read it out loud as if you are using them in real life with your family or friends.

        Take all the time you need to prepare, and when you are ready to record, you can simply start to read it out loud. If you want to record the sentence again, you can simply pause briefly and start from the beginning of the sentence again. When you are ready to continue with the next sentence, you can press "SPACE" key.

        Let's start with some try-outs. Press "SPACE" key to continue.
    KeyboardComponent key_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tutorial_trial
    KeyboardComponent key_tutorial
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $item
  Routine start_page
    TextComponent text_start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, let's get started.
        Press "SPACE" to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_page
    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you for your participation
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Flow
  Routine intro
  Routine instr
  LoopInitiator tutorial_trials loopType="TrialHandler"
    conditionsFile = stim_tutorial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item': 'I want to order Chinese food.'},
      {'item': 'Manuel lava la ropa.'}]
    Routine tutorial_trial
  LoopTerminator tutorial_trials
  Routine start_page
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli_production.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'phr': 'Why do you like my gatos?', 'list': 1, 'num': 1.0, 'cond': 't', 'lang': 'es'},
      {'phr': 'Where can we find your abuela?', 'list': 1, 'num': 2.0, 'cond': 't', 'lang': 'es'},
      {'phr': 'How did he get his móvil?', 'list': 1, 'num': 3.0, 'cond': 't', 'lang': 'es'},
      {'phr': 'What is in Juan´s camioneta?', 'list': 1, 'num': 4.0, 'cond': 't', 'lang': 'es'},
      {'phr': 'Who is buying Ariela´s chanclas?', 'list': 1, 'num': 5.0, 'cond': 't', 'lang': 'es'},
      {'phr': 'When should we visit your pueblo?', 'list': 1, 'num': 6.0, 'cond': 't', 'lang': 'es'},
      {'phr': 'Which one is his chaqueta?', 'list': 1, 'num': 7.0, 'cond': 't', 'lang': 'es'},
      {'phr': "Why can't I wear your camisa?", 'list': 1, 'num': 8.0, 'cond': 't', 'lang': 'es'},
      {'phr': 'Where can we find your mom´s taquería?', 'list': 1, 'num': 9.0, 'cond': 't', 'lang': 'es'},
      {'phr': 'How did Alicia lost her pulsera?', 'list': 1, 'num': 10.0, 'cond': 't', 'lang': 'es'},
      {'phr': 'What color is your sillón?', 'list': 1, 'num': 11.0, 'cond': 't', 'lang': 'es'},
      {'phr': 'Who drew on my libro de texto?', 'list': 1, 'num': 12.0, 'cond': 't', 'lang': 'es'},
      {'phr': 'When should we start drining my cerveza?', 'list': 1, 'num': 13.0, 'cond': 't', 'lang': 'es'},
      {'phr': 'Why do you have my llaves?', 'list': 1, 'num': 14.0, 'cond': 't', 'lang': 'es'},
      {'phr': 'Where did you buy your gafas?', 'list': 1, 'num': 15.0, 'cond': 't', 'lang': 'es'},
      {'phr': 'How much are you going to charge for your bolsa?', 'list': 1, 'num': 16.0, 'cond': 't', 'lang': 'es'}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
    Routine trial
  LoopTerminator trials
  Routine end_page
